PsychoPy2experiment version="3.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expName, expInfo['participant'], expInfo['session'], expInfo['date'])
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = HPMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 720]
  expName = verb_impression
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Routines
  Routine trial
    TextComponent text_verb
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = '「' + $verbs + '」人は'
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    TextComponent text_questionnarie
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $questionnarie
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    RatingScaleComponent rating
      categoryChoices = -3, -2, -1, 0, 1, 2, 3
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0
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  Routine blank
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions\condition_data4khc_20181126T215601_bow_pca_cat_scores_top10_verbs.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('verbs', '連絡する'), ('questionnarie', '感じの悪い-感じの良い'), ('q_id', 1), ('verb_id', 1), ('negative_flag', 0), ('pca_cat', 'approachableness')]),
      OrderedDict([('verbs', '連絡する'), ('questionnarie', '心の広い-心の狭い'), ('q_id', 2), ('verb_id', 1), ('negative_flag', 0), ('pca_cat', 'approachableness')]),
      OrderedDict([('verbs', '連絡する'), ('questionnarie', '非社交的な-社交的な'), ('q_id', 3), ('verb_id', 1), ('negative_flag', 0), ('pca_cat', 'approachableness')]),
      OrderedDict([('verbs', '連絡する'), ('questionnarie', '積極的な-消極的な'), ('q_id', 4), ('verb_id', 1), ('negative_flag', 0), ('pca_cat', 'approachableness')]),
      OrderedDict([('verbs', '連絡する'), ('questionnarie', '責任感のある-責任感のない'), ('q_id', 5), ('verb_id', 1), ('negative_flag', 0), ('pca_cat', 'approachableness')]),
      OrderedDict([('verbs', '連絡する'), ('questionnarie', '軽率な-慎重な'), ('q_id', 6), ('verb_id', 1), ('negative_flag', 0), ('pca_cat', 'approachableness')]),
      OrderedDict([('verbs', '気に入る'), ('questionnarie', '感じの悪い-感じの良い'), ('q_id', 1), ('verb_id', 2), ('negative_flag', 0), ('pca_cat', 'approachableness')]),
      OrderedDict([('verbs', '気に入る'), ('questionnarie', '心の広い-心の狭い'), ('q_id', 2), ('verb_id', 2), ('negative_flag', 0), ('pca_cat', 'approachableness')]),
      OrderedDict([('verbs', '気に入る'), ('questionnarie', '非社交的な-社交的な'), ('q_id', 3), ('verb_id', 2), ('negative_flag', 0), ('pca_cat', 'approachableness')]),
      OrderedDict([('verbs', '気に入る'), ('questionnarie', '積極的な-消極的な'), ('q_id', 4), ('verb_id', 2), ('negative_flag', 0), ('pca_cat', 'approachableness')])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
    Routine trial
    Routine blank
  LoopTerminator trials
